OpenViBE-Scenario
Comment
  Use with openvibe 0.18

  Record data from ser2sock.

TCP reader analog
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/ov-tcp-reader-analog-client.py
  IP = 127.0.0.1
  Port = 10000
  Debug = false
  Interpolation method = 0
-> Identity => #1
Processing stims => #2
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/ov-tcp-reader-stimulus-server.py
  IP = 127.0.0.1
  Port = 11001
  Debug = false
Heart beats => #3
  Clock frequency (Hz) = 128
  Script = ${__volatile_ScenarioDir}/ov-tcp-reader-stimulus-client.py
  IP = 127.0.0.1
  Port = 11000
  Debug = false
Input stimulations 1=#2, Input stimulations 2=#3 -> Stimulation multiplexer
-> 0xc67a01dc Identity => #5
-> Stimulation listener
  Log level to use = Information
Signal=#1, Stimulations=#5 -> Signal display "TCP reader"
  Time Scale = 8
  Display Mode = Scroll
  EEG display = false
  Manual Vertical Scale = false
  Vertical Scale = 100
Signal=#1, Stimulation=#5 -> GDF file writer
  Filename = ${__volatile_ScenarioDir}/../recordings/record-[$core{date}-$core{time}].gdf
